PsychoPy2experiment version="2022.1.4"
Settings
  Completed URL = https://forms.office.com/r/xq6aPyCyRc
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  color = -0.0550, -0.0550, -0.0550
  expName = ApparentMotion
  keyboardBackend = PsychToolbox
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Routines
  Routine MeasurementMotion
    TextComponent motion_resp_description
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0
      units = pix
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      text:
        Did you perceive motion between the two objects?

        1 = Yes, I did
        2 = No, I did not
    KeyboardComponent motion_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine MeasurementMasking
    TextComponent target_resp_description
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0
      units = pix
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      text:
        Did you see a target?

        1 = Yes, I did
        2 = No, I did not
    KeyboardComponent target_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cycle
    PolygonComponent O2D
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O4Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O24Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TD
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T4Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T4Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O1D
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O4Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O14Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2C
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O3Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O23Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TC
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T3Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T3Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O1C
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O3Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O13Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2B
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O2Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O22Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TB
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T2Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T2Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O1B
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O2Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O12Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2A
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O1Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O21Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TA
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T1Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T1Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O1A
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O1Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O11Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1E
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O5Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O15Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TE
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T5Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T5Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O2E
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O5Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O25Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1F
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O6Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O16Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TF
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T6Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T6Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O2F
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O6Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O26Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1G
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O7Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O17Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TG
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T7Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T7Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O2G
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O7Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O27Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1H
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O8Opacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O18Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent TH
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $TColour
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = T8Opacity
      pos [set every repeat] = [SX, TY]
      shape = regular polygon...
      size [set every repeat] = [TSize, TSize]
      startVal [time (s)] = $T8Onset
      stopVal [duration (s)] = 0.0333333
      units = pix
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    PolygonComponent O2H
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O8Opacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O28Onset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1A_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O1BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O11BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2A_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O1BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O21BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1B_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O2BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O12BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2B_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O2BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O22BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1C_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O3BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O13BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2C_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O3BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O23BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1D_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O4BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O14BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2D_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O4BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O24BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1E_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O5BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O15BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2E_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O5BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O25BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1F_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O6BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O16BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2F_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O6BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O26BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1G_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O7BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O17BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2G_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O7BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O27BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O1H_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O8BlinkOpacity
      pos [set every repeat] = [SX, O2Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O18BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent O2H_Blink
      contrast [set every repeat] = Contrast
      fillColor [set every repeat] = $OColor
      lineColor = (-0.0550, -0.0550, -0.0550)
      lineWidth [set every repeat] = LineWidth
      opacity [set every repeat] = O8BlinkOpacity
      pos [set every repeat] = [SX, O1Y]
      shape = regular polygon...
      size [set every repeat] = [OSize, OSize]
      startVal [time (s)] = $O28BlinkOnset
      stopVal [duration (s)] = 0.08333333333
      units = pix
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    PolygonComponent Cross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CrossDuration
      units = pix
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  Routine Test_MeasurementMotion
    TextComponent motion_resp_description_test
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Did you perceive a motion between the objects?

        1 = Yes
        2 = No
    KeyboardComponent motion_resp_test
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Test_MeasurementMasking
    TextComponent target_resp_description_test
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0
      units = pix
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      text:
        Did you see a third object between the two objects?

        1 = Yes
        2 = No
    KeyboardComponent target_resp_test
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Thank you. This is the end of the study.

        Next, a form will open to provide you a quick debrief. Press the spacebar to access this form.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Description_2
    TextComponent Test
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 4.5
      units = pix
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      text:
        Now you will see a sequence with a target between the two corner objects. Yet again, this sequence is slowed down.

        Please press the spacebar to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.5
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    PolygonComponent O2_Test_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [600, 270]
      shape = regular polygon...
      size = [60,60]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent O1_Test_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [600, -270]
      shape = regular polygon...
      size = [60, 60]
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.25
      units = pix
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (0, 80)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = Start fixating on the central fixation cross.
      units = pix
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    PolygonComponent Cross_Test2_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.5
      units = pix
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  Routine Test_Description_1
    TextComponent Test_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0
      units = pix
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      text:
        Let us run through a quick example of the two objects flashing in succession without any target. Note that for illustrative purposes, this sequence is slowed down.

        Please press the spacebar to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Test_Description_3
    PolygonComponent O2_Test2_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [-600, -270]
      shape = regular polygon...
      size = [60,60]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent Target_Test_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [-600, -90]
      shape = regular polygon...
      size = [45,45]
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.05
      units = pix
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    PolygonComponent O1_Test2_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [-600, 270]
      shape = regular polygon...
      size = [60,60]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent Cross_Test_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      units = pix
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    TextComponent Test_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 1.5
      units = pix
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      text:
        Great! Let us now try an entire cycle in real-time.

        Simply look at the fixation cross. After the sequences, you will be asked about whether you saw a target and perceived a kind of motion between the two squares. When it comes to motion perception, please keep in mind that there is no "correct" response, just trust your intuition and indicate what you think is right.

        Please press the spacebar to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine Test_Description_4
    PolygonComponent O1_Test3_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [600, -270]
      shape = regular polygon...
      size = [60,60]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.08333333
      units = pix
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    PolygonComponent O2_Test3_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [600, 270]
      shape = regular polygon...
      size = [60,60]
      startVal [time (s)] = 0.6666666667
      stopVal [duration (s)] = 0.08333333
      units = pix
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    PolygonComponent O1_Test4_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [600, -270]
      shape = regular polygon...
      size = [60,60]
      startVal [time (s)] = 0.8333333333
      stopVal [duration (s)] = 0.08333333
      units = pix
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    PolygonComponent Target_Test2_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [600, -90]
      shape = regular polygon...
      size = [45,45]
      startVal [time (s)] = 0.9333333333
      stopVal [duration (s)] = 0.0333333333
      units = pix
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    PolygonComponent O2_Test4_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = [600, 270]
      shape = regular polygon...
      size = [60,60]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.08333333
      units = pix
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    TextComponent motion_resp_description_test_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 1.2
      units = pix
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      text:
        Did you perceive a motion between the objects?

        1 = Yes
        2 = No
    KeyboardComponent motion_resp_test_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 1.2
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    PolygonComponent Cross_Test3_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.2
      units = pix
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  Routine PreCycle
    PolygonComponent PreCycle_Cross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine Intro
    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Welcome to this study.

        Please press the spacebar to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Study_Description
    TextComponent IntroText1_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 18
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Before we begin, let us run through a brief introduction. You are free to withdraw from your participation in this study at any time.

        During the experiment, please look at the central fixation cross whenever it appears in the centre.

        In each sequence, two objects will vertically flash in succession from one corner to another corner of the screen. Such a sequence could go from upper left to lower left corner, or from lower right to upper right corner. Sometimes this presentation may look like there is motion between the dots.

        You will also sometimes see a third object between the two objects on some sequences. This object is called target.

        A cycle can be one sequence, or it can feature multiple sequences in succession.

        All this may sound a bit abstract and confusing, but your task throughout the experiment is actually really simple: fixate on the central fixation cross and respond to the questions at the end of each cycle. You will be asked if you saw motion, and you will also be asked if you saw a target between the two objects. That's it. The whole process will repeat multiple times.

        Please press the spacebar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Description_5
    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Great. This is basically how the entire experiment is going to be like. There will be three blocks and two breaks.

        Everything understood?

        Please press the spacebar to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Debrief1
    TextComponent OutroText1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is the end of this experiment. Well done!
      units = pix
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 1.0
      units = pix
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      text:
        In case you are wondering what you just did and what it is all about: You have just completed your participation in a study that investigates apparent motion, an intriguing illusory phenomenon of human perception. When two or more objects are presented rapidly after one another, humans tend to perceive motion between them. Psychophysical studies, including the experiment you have just completed, explore the characteristics of these illusions. They seek to derive insights on how we perceive motion in general – an important area of investigation, as motion perception is integral for our visual reality and everyday life.

        You indicated your detection of targets and motion between the start and end squares. The underlying rationale was to explore the masking of these targets, which means that the perception of apparent motion leads us to less frequently detect targets presented between the start and end objects. As you may have noticed, the timing of the objects and number of sequences were varied. The insights drawn from these variations will be analysed and might illuminate our understanding of how motion is processed and predicted by the brain. The demographic information you provided will be used to explore differences in such motion masking across age, gender, and culture, as measured by participants’ nationality.

        Please press the spacebar continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Debrief2
    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
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      text:
        If you have enquiries about the experiment and your participation, want to provide feedback, or wish to withdraw your information, please contact the researcher and supervisor of this study:
        - Alexander Rudolf Buchberger (Researcher of this study): 2693163B@student.gla.ac.uk
        - Michele Svanera (Supervisor of this study): michele.svanera@glasgow.ac.uk

        Should you not wish your data being used for this dissertation, please send a simple electrical withdrawal request to one of the aforementioned Email addresses. The withdrawal of information will lead to the manual deletion of the data you provided in this study. Please note, however, that your information may have already been used for statistical purposes and submitted as part of this dissertation to the University of Glasgow.
        Thank you very much for your participation!

        Please press the spacebar continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start_Experiment
    TextComponent Test_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
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      text:
        The experiment will now begin. Please fix the fixation cross in the center.

        Please press the spacebar to start the experiment.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Study_Description_2
    ImageComponent image_4
      image = ExpExplanation.jpg
      size = (1000, 1000)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyRequirements
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Please:
        - sit in a room without distractions
        - darken the room as much as possible (e.g., by turning off room lights or other light sources)
        - ensure a stable internet connection
        - close other applications that are not necessary for this experiment
        - set your screen brightness to the highest level

        Please press the spacebar to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntercycleBreak1
    TextComponent BreakAnnouncement_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = pix
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      text:
        Great work, thank you!

        Let us take a break.

        Just sit, relax, and look at the following two images of natural scenes.
    ImageComponent image_2
      image = NaturalScene1.jpg
      size = [500,500]
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent image_3
      image = NaturalScene2.jpg
      size = [500,500]
      startVal [time (s)] = 15
      stopVal [duration (s)] = 10
      units = pix
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 25
      text = Press the spacebar to start the second block whenever you are ready.
      units = pix
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 25
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  Routine IntercycleBreak2
    TextComponent BreakAnnouncement
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = pix
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      text:
        Great work, thank you!

        Let us take another break.

        Just sit, relax, and look at the following two images of natural scenes.
    ImageComponent image
      image = NaturalScene3.jpg
      size = [500,500]
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent image_5
      image = NaturalScene4.jpg
      size = [500,500]
      startVal [time (s)] = 15
      stopVal [duration (s)] = 10
      units = pix
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 25
      text = Press the spacebar to start the last block whenever you are ready.
      units = pix
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 25
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Flow
  Routine Intro
  Routine Study_Description
  Routine Study_Description_2
  Routine Test_Description_1
  Routine Test_Description_2
  Routine Test_Description_3
  Routine Test_Description_4
  Routine Test_MeasurementMasking
  Routine Test_Description_5
  Routine Start_Experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ExpConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Number': 1, 'Condition': 'AM', 'Type': 'Exp', 'Sequence': 1, 'Target': 'Yes', 'Predictability': 'Predictable', 'Time': 1, 'ScreenSide': 'Right', 'Trajectory': 'Downward', 'TPosition': (-14, -2.5), 'O1Position': (14, -7), 'O1BlinkPosition': (14, 7), 'O2Position': (14, 7), 'O2BlinkPosition': (14, -7), 'TColour': (1.0, 1.0, 1.0), 'OColor': (1.0, 1.0, 1.0), 'T1Opacity': 1, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity': 1, 'O1BlinkOpacity': 0, 'O2Opacity': 0, 'O2BlinkOpacity': 0, 'O3Opacity': 0, 'O3BlinkOpacity': 0, 'O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,
      {'Number': 2, 'Condition': 'AM', 'Type': 'Exp', 'Sequence': 1, 'Target': 'Yes', 'Predictability': 'Unpredictable', 'Time': 2, 'ScreenSide': 'Right', 'Trajectory': 'Downward', 'TPosition': (-14, -2.5), 'O1Position': (14, -7), 'O1BlinkPosition': (14, 7), 'O2Position': (14, 7), 'O2BlinkPosition': (14, -7), 'TColour': (1.0, 1.0, 1.0), 'OColor': (1.0, 1.0, 1.0), 'T1Opacity': 1, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity': 1, 'O1BlinkOpacity': 0, 'O2Opacity': 0, 'O2BlinkOpacity': 0, 'O3Opacity': 0, 'O3BlinkOpacity': 0, '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,
      {'Number': 3, 'Condition': 'AM', 'Type': 'Control', 'Sequence': 1, 'Target': 'No', 'Predictability': 'NotApplicable', 'Time': 0, 'ScreenSide': 'Right', 'Trajectory': 'Upward', 'TPosition': (-14, -2.5), 'O1Position': (14, -7), 'O1BlinkPosition': (14, 7), 'O2Position': (14, 7), 'O2BlinkPosition': (14, -7), 'TColour': (1.0, 1.0, 1.0), 'OColor': (1.0, 1.0, 1.0), 'T1Opacity': 0, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity': 1, 'O1BlinkOpacity': 0, 'O2Opacity': 0, 'O2BlinkOpacity': 0, 'O3Opacity': 0, 'O3BlinkOpacity': 0, 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,
      {'Number': 4, 'Condition': 'BLINK', 'Type': 'Control', 'Sequence': 1, 'Target': 'Yes', 'Predictability': 'NotApplicable', 'Time': 1, 'ScreenSide': 'Right', 'Trajectory': 'Downward', 'TPosition': (-14, -2.5), 'O1Position': (14, -7), 'O1BlinkPosition': (14, 7), 'O2Position': (14, 7), 'O2BlinkPosition': (14, -7), 'TColour': (1.0, 1.0, 1.0), 'OColor': (1.0, 1.0, 1.0), 'T1Opacity': 1, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity': 1, 'O1BlinkOpacity': 1, 'O2Opacity': 0, 'O2BlinkOpacity': 0, 'O3Opacity': 0, 'O3BlinkOpacity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
    Routine PreCycle
    Routine Cycle
    Routine MeasurementMotion
    Routine MeasurementMasking
  LoopTerminator trials
  Routine IntercycleBreak1
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = ExpConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine PreCycle
    Routine Cycle
    Routine MeasurementMotion
    Routine MeasurementMasking
  LoopTerminator Loop
  Routine IntercycleBreak2
  LoopInitiator FirstLoop loopType="TrialHandler"
    conditionsFile = ExpConditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'Number': 1, 'Condition': 'AM', 'Type': 'Exp', 'Sequence': 1, 'Target': 'Yes', 'Predictability': 'Predictable', 'Time': 1, 'ScreenSide': 'Randomised', 'Trajectory': 'Downward', 'TPosition': (16, -3), 'O1Position': (16, -9), 'O1BlinkPosition': (16, 9), 'O2Position': (16, 9), 'O2BlinkPosition': (16, -9), 'TColour': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'OColor': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'T1Opacity': 1, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity': 1, 'O1BlinkOpa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,
      {'Number': 2, 'Condition': 'AM', 'Type': 'Exp', 'Sequence': 1, 'Target': 'Yes', 'Predictability': 'Unpredictable', 'Time': 2, 'ScreenSide': 'Randomised', 'Trajectory': 'Downward', 'TPosition': (16, -3), 'O1Position': (16, -9), 'O1BlinkPosition': (16, 9), 'O2Position': (16, 9), 'O2BlinkPosition': (16, -9), 'TColour': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'OColor': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'T1Opacity': 1, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity': 1, 'O1BlinkOp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,
      {'Number': 3, 'Condition': 'AM', 'Type': 'Control', 'Sequence': 1, 'Target': 'No', 'Predictability': 'NotApplicable', 'Time': 0, 'ScreenSide': 'Randomised', 'Trajectory': 'Randomised', 'TPosition': (16, -3), 'O1Position': (16, -9), 'O1BlinkPosition': (16, 9), 'O2Position': (16, 9), 'O2BlinkPosition': (16, -9), 'TColour': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'OColor': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'T1Opacity': 0, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity': 1, 'O1Bl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,
      {'Number': 4, 'Condition': 'BLINK', 'Type': 'Control', 'Sequence': 1, 'Target': 'Randomised', 'Predictability': 'NotApplicable', 'Time': 1, 'ScreenSide': 'Randomised', 'Trajectory': 'Downward', 'TPosition': (16, -3), 'O1Position': (16, -9), 'O1BlinkPosition': (16, 9), 'O2Position': (16, 9), 'O2BlinkPosition': (16, -9), 'TColour': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'OColor': (0.325490196078431, 0.325490196078431, 0.325490196078431), 'T1Opacity': 1, 'T2Opacity': 0, 'T3Opacity': 0, 'T4Opacity': 0, 'T5Opacity': 0, 'T6Opacity': 0, 'T7Opacity': 0, 'T8Opacity': 0, 'O1Opacity':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
    Routine PreCycle
    Routine Cycle
    Routine MeasurementMotion
    Routine MeasurementMasking
  LoopTerminator FirstLoop
  Routine End
